CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:32
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ir193")
    Name to assign these images:Nucleus_Ir
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "HH3")
    Name to assign these images:Nucleus_HH3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Y89")
    Name to assign these images:CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "In113")
    Name to assign these images:CD68
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "In115")
    Name to assign these images:HLADR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Pr141")
    Name to assign these images:SMA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nd142")
    Name to assign these images:CD15
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nd143")
    Name to assign these images:LYVE1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nd144")
    Name to assign these images:CXCR6
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nd145")
    Name to assign these images:CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nd146")
    Name to assign these images:CD39
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sm147")
    Name to assign these images:CD163
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nd148")
    Name to assign these images:CD11c
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sm149")
    Name to assign these images:CXCR5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Eu151")
    Name to assign these images:ATF6
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sm152")
    Name to assign these images:TCF1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Eu153")
    Name to assign these images:TOX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sm154")
    Name to assign these images:Tim3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Gd155")
    Name to assign these images:FoxP3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Gd156")
    Name to assign these images:CD4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Gd158")
    Name to assign these images:Ecadherin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Tb159")
    Name to assign these images:Bcatenin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Gd160")
    Name to assign these images:Tbet
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Dy161")
    Name to assign these images:CD20
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Dy162")
    Name to assign these images:CD8
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ho165")
    Name to assign these images:PD1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Er166")
    Name to assign these images:CD204
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Er167")
    Name to assign these images:GranzymeB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Er168")
    Name to assign these images:FAK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Yb172")
    Name to assign these images:CD38
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Yb173")
    Name to assign these images:CD45RO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Lu175")
    Name to assign these images:CD34
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath_tissue
    Image or measurement?:Image
    Select the first image:CD68
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:SMA
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:CD15
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:CD4
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Bcatenin
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:CD8
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:CD45
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:CD20
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Ecadherin
    Multiply the ninth image by:1.0
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
ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:2000
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath_nucleus
    Image or measurement?:Image
    Select the first image:Nucleus_Ir
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Nucleus_HH3
    Multiply the second image by:1.0
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
RunCellpose:[module_num:7|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
    Select the input image:ImageAfterMath_tissue
    Expected object diameter:15
    Detection mode:tissuenet
    Name the output object:RunCellpose_Cell
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:ImageAfterMath_nucleus
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:50
    Cell probability threshold:-3
    GPU memory share for each worker:0.7
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:7
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMath_tissue
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:red
    Select objects to display:RunCellpose_Cell

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:Yes
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    Name the output image:Outline_cell
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:RunCellpose_Cell

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:Outline_cell
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Outline_cell_
    Number of digits:0
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    Saved file format:tiff
    Output file location:Elsewhere...|D:\\ATF6 FAK 2_0\\Round 1\\20240719_NV_0094_HCC\\compensated data\\20240719_NV_0094_HCC_0094 HCC Tumor_1_compensated\\csv and outlines\\outline cell
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

Crop:[module_num:11|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
    Select the input image:ImageAfterMath_nucleus
    Name the output image:CropBlue
    Select the cropping shape:Objects
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    Remove empty rows and columns?:No
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    Select the objects:RunCellpose_Cell

RunCellpose:[module_num:12|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
    Select the input image:CropBlue
    Expected object diameter:7
    Detection mode:cyto
    Name the output object:RunCellpose_Nucleus
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
    Select the nuclei image:CropBlue
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:200
    Cell probability threshold:0
    GPU memory share for each worker:0.7
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:2
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMath_nucleus
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:RunCellpose_Nucleus

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:Yes
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    Name the output image:Outline_nucleus
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:RunCellpose_Nucleus

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:Outline_nucleus
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Outline_nucleus_
    Number of digits:0
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    Saved file format:tiff
    Output file location:Elsewhere...|D:\\ATF6 FAK 2_0\\Round 1\\20240719_NV_0094_HCC\\compensated data\\20240719_NV_0094_HCC_0094 HCC Tumor_1_compensated\\csv and outlines\\outline nucleus
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

RelateObjects:[module_num:16|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
    Parent objects:RunCellpose_Nucleus
    Child objects:RunCellpose_Cell
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects
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
IdentifyTertiaryObjects:[module_num:17|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
    Select the larger identified objects:RelateObjects
    Select the smaller identified objects:RunCellpose_Nucleus
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:18|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
    Select images to measure:ATF6, Bcatenin, CD11c, CD15, CD163, CD20, CD204, CD3, CD34, CD38, CD39, CD4, CD45, CD45RO, CD68, CD8, CXCR5, CXCR6, Ecadherin, FAK, FoxP3, GranzymeB, HLADR, LYVE1, Nucleus_HH3, Nucleus_Ir, PD1, SMA, TCF1, TOX, Tbet, Tim3
    Select objects to measure:Cytoplasm, RelateObjects, RunCellpose_Cell, RunCellpose_Nucleus

MeasureObjectSizeShape:[module_num:19|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
    Select object sets to measure:Cytoplasm, RelateObjects, RunCellpose_Cell, RunCellpose_Nucleus
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\ATF6 FAK 2_0\\Round 1\\20240719_NV_0094_HCC\\compensated data\\20240719_NV_0094_HCC_0094 HCC Tumor_1_compensated\\csv and outlines\\csv
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:RelateObjects|Intensity_MeanIntensity_CD68,RelateObjects|Intensity_MeanIntensity_CD15,RelateObjects|Intensity_MeanIntensity_TCF1,RelateObjects|Intensity_MeanIntensity_CD11c,RelateObjects|Intensity_MeanIntensity_CXCR6,RelateObjects|Intensity_MeanIntensity_ATF6,RelateObjects|Intensity_MeanIntensity_Bcatenin,RelateObjects|Intensity_MeanIntensity_CXCR5,RelateObjects|Intensity_MeanIntensity_CD204,RelateObjects|Intensity_MeanIntensity_CD4,RelateObjects|Intensity_MeanIntensity_Ecadherin,RelateObjects|Intensity_MeanIntensity_CD39,RelateObjects|Intensity_MeanIntensity_CD163,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20240719_NV_0094_HCC_Tumor_
    Overwrite existing files without warning?:No
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