CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:35
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ir193")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Y89")
    Name to assign these images:CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "In113")
    Name to assign these images:CD68
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "In115")
    Name to assign these images:HLADR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Pr141")
    Name to assign these images:SMA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nd142")
    Name to assign these images:CD15
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nd145")
    Name to assign these images:CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nd146")
    Name to assign these images:CD39
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nd148")
    Name to assign these images:CD11c
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nd144")
    Name to assign these images:CXCR6
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sm149")
    Name to assign these images:CXCR5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Dy163")
    Name to assign these images:XBP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Eu151")
    Name to assign these images:ATF6
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sm152")
    Name to assign these images:TCF1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Eu153")
    Name to assign these images:TOX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Gd155")
    Name to assign these images:FoxP3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Gd156")
    Name to assign these images:CD4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Gd157")
    Name to assign these images:TIGIT
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Gd158")
    Name to assign these images:Ecadherin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Tb159")
    Name to assign these images:Bcatenin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Dy161")
    Name to assign these images:CD20
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Dy162")
    Name to assign these images:CD8
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ho165")
    Name to assign these images:PD1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Er166")
    Name to assign these images:CD204
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Er167")
    Name to assign these images:GranzymeB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Tm169")
    Name to assign these images:Collagen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Yb173")
    Name to assign these images:CD45RO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Lu175")
    Name to assign these images:CD34
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Yb176")
    Name to assign these images:CK7
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Yb174")
    Name to assign these images:ATF4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sm154")
    Name to assign these images:Tim3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Gd160")
    Name to assign these images:Tbet
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Dy164")
    Name to assign these images:WGA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Er168")
    Name to assign these images:FAK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Yb172")
    Name to assign these images:CD38
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:CD68
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:SMA
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:CD15
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:CD4
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Bcatenin
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:CD8
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:CD45
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:CD20
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Ecadherin
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:Collagen
    Multiply the tenth image by:1.0
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
SaveImages:[module_num:6|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:ImageAfterMath
    Select method for constructing file names:Single name
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    Enter single file name:immagemath
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

RescaleIntensity:[module_num:7|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
    Select the input image:Nucleus
    Name the output image:RescaleIntensityN
    Rescaling method:Divide each image by the same value
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    Divisor value:0.1
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
RunCellpose:[module_num:8|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
    Select the input image:ImageAfterMath
    Expected object diameter:15
    Detection mode:tissuenet
    Name the output object:RunCellpose_C
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:RescaleIntensityN
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:50
    Cell probability threshold:-3
    GPU memory share for each worker:0.7
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:7
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

OverlayOutlines:[module_num:9|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Ecadherin
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:red
    Select objects to display:RunCellpose_C

Crop:[module_num:10|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
    Select the input image:RescaleIntensityN
    Name the output image:CropBlue
    Select the cropping shape:Objects
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    Remove empty rows and columns?:No
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    Select the objects:RunCellpose_C

RunCellpose:[module_num:11|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
    Select the input image:CropBlue
    Expected object diameter:10
    Detection mode:cyto
    Name the output object:RunCellpose_N
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
    Select the nuclei image:Nucleus
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:200
    Cell probability threshold:0
    GPU memory share for each worker:0.7
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:2
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

OverlayOutlines:[module_num:12|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:XBP1
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:RunCellpose_N

RelateObjects:[module_num:13|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
    Parent objects:RunCellpose_N
    Child objects:RunCellpose_C
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects
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
IdentifyTertiaryObjects:[module_num:14|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
    Select the larger identified objects:RelateObjects
    Select the smaller identified objects:RunCellpose_N
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:ATF4, ATF6, Bcatenin, CD11c, CD15, CD20, CD204, CD3, CD34, CD38, CD39, CD4, CD45, CD45RO, CD68, CD8, CK7, CXCR5, CXCR6, Collagen, CropBlue, Ecadherin, FAK, FoxP3, GranzymeB, HLADR, Nucleus, PD1, SMA, TCF1, TIGIT, TOX, Tbet, Tim3, WGA, XBP1
    Select objects to measure:Cytoplasm, RelateObjects, RunCellpose_C, RunCellpose_N

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Cytoplasm, RelateObjects, RunCellpose_C, RunCellpose_N
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

DisplayDataOnImage:[module_num:17|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:RelateObjects
    Measurement to display:AreaShape_MaxFeretDiameter
    Select the image on which to display the measurements:ImageAfterMath
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):5
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
MeasureObjectNeighbors:[module_num:18|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enabled:False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
    Select objects to measure:RunCellpose_C
    Select neighboring objects to measure:RunCellpose_C
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|F:\\ATF6 FAK\\20240716_NV_0611_HCC\\20240716_NV_0611_HCC_0611_HCC_Margin_2\\csv
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:RunCellpose_N|Intensity_MeanIntensity_CD11c,RunCellpose_N|Intensity_MeanIntensity_CD204,RunCellpose_N|Intensity_MeanIntensity_CXCR5,RunCellpose_N|Intensity_MeanIntensity_GranzymeB,RunCellpose_N|Intensity_MeanIntensity_TOX,RunCellpose_N|Intensity_MeanIntensity_Nucleus,RunCellpose_N|Intensity_MeanIntensity_SMA,RunCellpose_N|Intensity_MeanIntensity_TIGIT,RunCellpose_N|Intensity_MeanIntensity_CD15,RunCellpose_N|Intensity_MeanIntensity_CD39,RunCellpose_N|Intensity_MeanIntensity_CD45,RunCellpose_N|Intensity_MeanIntensity_TCF1,RunCellpose_N|Intensity_MeanIntensity_ATF6,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20240716_NV_0611_HCC_0611_HCC_Margin_2_
    Overwrite existing files without warning?:No
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
DisplayHistogram:[module_num:20|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enabled:False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
    Select the object whose measurements will be displayed:RunCellpose_N
    Select the object measurement to plot:Intensity_MeanIntensity_CD8
    Number of bins:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1

FilterObjects:[module_num:21|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enabled:False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
    Select the objects to filter:RunCellpose_N
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_CD8
    Filter using a minimum measurement value?:Yes
    Minimum value:0.15
    Filter using a maximum measurement value?:Yes
    Maximum value:20

MeasureObjectIntensity:[module_num:22|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enabled:False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
    Select images to measure:ATF6, Bcatenin, CD11c, CD15, CD20, CD204, CD3, CD34, CD38, CD39, CD4, CD45, CD45RO, CD68, CD8, CK7, CXCR5, Collagen, CropBlue, Ecadherin, FoxP3, GranzymeB, HLADR, Nucleus, PD1, SMA, TCF1, TIGIT, TOX, Tbet, Tim3
    Select objects to measure:FilterObjects

Crop:[module_num:23|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enabled:False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
    Select the input image:CD8
    Name the output image:CropBlue
    Select the cropping shape:Objects
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    Remove empty rows and columns?:No
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    Select the objects:FilterObjects
